OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.2.1)

GDF file reader => #0
  Filename = C:/Users/Frances Sander/Desktop/pd_worm/record-[2016.12.04-10.01.22].gdf
  Samples per buffer = 32
  Subtract physical minimum = false
#0.EEG stream -> Temporal filter => #1
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 8.000000
  High cut frequency (Hz) = 12.000000
  Pass band ripple (dB) = 0.500000
Data=#1 -> Signal display "Alpha signal"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
#1 -> Time based epoching => #3
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  Epoch 2 duration (in sec) = 1
  Epoch 2 intervals (in sec) = 0.5
#3.Epoched signal 1 -> Simple DSP
  Equation = x*x
-> Signal average
-> Epoch average => #6
  Averaging type = Moving epoch average
  Epoch count = 4
Data=#6 -> Signal display "Alpha power"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
#6 -> OSC Controller
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9005
  OSC Address = /alpha
